PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['audio_exp.mp3', 'bootsarcticdrift.png', 'bootsarctichunter.png', 'bootsarcticsnow.png', 'bootsfrostpeak.png', 'bootsfrostridge.png', 'bootsglacierridge.png', 'bootsglaciertrek.png', 'bootsnordway.png', 'bootsnorthridge.png', 'bootsnorthtrail.png', 'bootspolardrift.png', 'bootspolarfox.png', 'bootspolarhunter.png', 'bootssibir.png', 'bootssnowranger.png', 'bootssnowridge.png', 'bootssnowway.png', 'bootstaiga.png', 'bootswinterfox.png', 'bootswintertrail.png', 'exp_stimuli_high.xlsx', 'hatarcticline.png', 'hatarcticpeak.png', 'hatarcticridge.png', 'hatfrostline.png', 'hatfrostpeak.png', 'hatfrostridge.png', 'hatglacierline.png', 'hatglacierpeak.png', 'hatglacierwarm.png', 'hatnorthpeak.png', 'hatnorthridge.png', 'hatnorthwind.png', 'hatpolarline.png', 'hatpolarridge.png', 'hatpolarsnow.png', 'hatsnowpeak.png', 'hatsnowridge.png', 'hatwinterline.png', 'hatwinterpeak.png', 'hatwinterridge.png', 'jacketarcticridge.png', 'jacketarcticwear.png', 'jacketfrostarctic.png', 'jacketfrostline.png', 'jacketfrostridge.png', 'jacketglacierpro.png', 'jacketglacierstorm.png', 'jacketicetrail.png', 'jacketnorthpeak.png', 'jacketnorthridge.png', 'jacketnorthwind.png', 'jacketpolarstyle.png', 'jacketsnowear.png', 'jacketsnowpeak.png', 'jacketsnowridge.png', 'jacketsnowridge2.png', 'jacketwinterpeak.png', 'jacketwinterridge.png', 'jacketwinterstorm.png', 'jacketwinterwind.png', 'marketplace_exp.png', 'pantsaarcticridge.png', 'pantsarcticfit.png', 'pantsarcticridge.png', 'pantsarcticstorm.png', 'pantsfrostridge.png', 'pantsfrosttrail.png', 'pantsfrostwear.png', 'pantsglacierridge.png', 'pantsglacierwalk.png', 'pantsnorthline.png', 'pantsnorthridge.png', 'pantsnorthtrek.png', 'pantspolarmove.png', 'pantspolartrek.png', 'pantssnowmotion.png', 'pantssnowridge.png', 'pantssnowridge2.png', 'pantssnowstep.png', 'pantswintertrek.png', 'pantswwinterwear.png']
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = exp_high
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine instr
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    TextComponent instr_text
      letterHeight = 30/1080
      startVal [time (s)] = 0.0
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      text:
        В ходе эксперимента вам необходимо одновременно выполнять две задачи.Во время выполнения задания вы будете слушать аудиорассказ. Пожалуйста, слушайте его внимательно, так как после завершения эксперимента вам будут заданы вопросы по его содержанию. Одновременно на экране будут последовательно появляться страницы с товарами. Перед каждой страницей вам будет показано название товара, который необходимо найти. После появления страницы как можно быстрее найдите соответствующий товар и нажмите на него мышью. Если вы случайно нажали не на тот товар, продолжайте поиск нужного товара до окончания пробы. Пожалуйста, старайтесь выполнять обе задачи максимально внимательно.
        Для начала эксперимента нажмите клавишу «Пробел».
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial
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    CodeComponent code
      Code Type = Both
      Begin Experiment:
        import random
        win.mouseVisible = True
        allItems = data.importConditions("exp_stimuli_high.xlsx")

        itemsByCategory = {}

        for row in allItems:
            cat = row["category"]

            if cat not in itemsByCategory:
                itemsByCategory[cat] = []

            itemsByCategory[cat].append(row)
      Begin JS Experiment:
        psychoJS.window.mouseVisible = true;

        allItems = TrialHandler.importConditions(
            psychoJS.serverManager,
            "exp_stimuli_high.xlsx"
        );

        itemsByCategory = {};

        for (let row of allItems) {
            let cat = row["category"];

            if (!(cat in itemsByCategory)) {
                itemsByCategory[cat] = [];
            }

            itemsByCategory[cat].push(row);
        }
      Begin JS Routine:
        target = {
            "category": category,
            "name": name,
            "stimuli": stimuli
        };

        sameCategoryItems = itemsByCategory[category];

        possibleDistractors = [];

        for (let item of sameCategoryItems) {
            if (item["stimuli"] !== stimuli) {
                possibleDistractors.push(item);
            }
        }

        // выбираем 7 случайных дистракторов
        possibleDistractors = possibleDistractors.sort(() => Math.random() - 0.5);
        distractors = possibleDistractors.slice(0, 7);

        cards = distractors.concat([target]);

        // перемешиваем 8 карточек
        cards = cards.sort(() => Math.random() - 0.5);

        img1 = cards[0]["stimuli"];
        img2 = cards[1]["stimuli"];
        img3 = cards[2]["stimuli"];
        img4 = cards[3]["stimuli"];
        img5 = cards[4]["stimuli"];
        img6 = cards[5]["stimuli"];
        img7 = cards[6]["stimuli"];
        img8 = cards[7]["stimuli"];

        targetPos = null;

        for (let i = 0; i < cards.length; i++) {
            if (cards[i]["stimuli"] === stimuli) {
                targetPos = i + 1;
            }
        }

        target_name = name;
        target_image = stimuli;
        target_category = category;

        clicked_target = 0;
        rt_target = "";

        mouse.clickReset();
        mouse_was_down = false;

        imageList = [
            image,
            image_2,
            image_3,
            image_4,
            image_5,
            image_6,
            image_7,
            image_8
        ];

        targetObject = imageList[targetPos - 1];
      Begin Routine:
        target = {
            "category": category,
            "name": name,
            "stimuli": stimuli
        }

        sameCategoryItems = itemsByCategory[category]

        possibleDistractors = []

        for item in sameCategoryItems:
            if item["stimuli"] != stimuli:
                possibleDistractors.append(item)

        distractors = random.sample(possibleDistractors, 7)

        cards = distractors + [target]

        random.shuffle(cards)

        img1 = cards[0]["stimuli"]
        img2 = cards[1]["stimuli"]
        img3 = cards[2]["stimuli"]
        img4 = cards[3]["stimuli"]
        img5 = cards[4]["stimuli"]
        img6 = cards[5]["stimuli"]
        img7 = cards[6]["stimuli"]
        img8 = cards[7]["stimuli"]

        targetPos = None

        for i, card in enumerate(cards):
            if card["stimuli"] == stimuli:
                targetPos = i + 1

        target_name = name
        target_image = stimuli
        target_category = category

        clicked_target = 0
        rt_target = ""

        mouse.clickReset()

        imageList = [
            image,
            image_2,
            image_3,
            image_4,
            image_5,
            image_6,
            image_7,
            image_8
        ]

        targetObject = imageList[targetPos - 1]
      Each Frame:
        buttons = mouse.getPressed()

        if buttons[0] and not mouse_was_down:
            if targetObject.contains(mouse):
                clicked_target = 1
                rt_target = mouse.mouseClock.getTime()
                continueRoutine = False

            mouse_was_down = True

        if not buttons[0]:
            mouse_was_down = False
      Each JS Frame:
        buttons = mouse.getPressed();

        if ((buttons[0] && (!mouse_was_down))) {
            if (targetObject.contains(mouse)) {
                clicked_target = 1;
                rt_target = t;
                continueRoutine = false;
            }

            mouse_was_down = true;
        }

        if ((!buttons[0])) {
            mouse_was_down = false;
        }
      End JS Routine:
        psychoJS.experiment.addData("clicked_target", clicked_target);
        psychoJS.experiment.addData("rt_target", rt_target);
        psychoJS.experiment.addData("target_name", target_name);
        psychoJS.experiment.addData("target_image", target_image);
        psychoJS.experiment.addData("target_category", target_category);
        psychoJS.experiment.addData("target_position", targetPos);
      End Routine:
        thisExp.addData("clicked_target", clicked_target)
        thisExp.addData("rt_target", rt_target)
        thisExp.addData("target_name", target_name)
        thisExp.addData("target_image", target_image)
        thisExp.addData("target_category", target_category)
        thisExp.addData("target_position", targetPos)
    ImageComponent bkg_image
      image = marketplace_exp.png
      size = (1920/1080, 1080/1080)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent image
      image [set every repeat] = $img1
      pos = (-635/1080, -287/1080)
      size = (327/1080,383/1080)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent image_2
      image [set every repeat] = $img2
      pos = (-221/1080,-287/1080)
      size = (327/1080,383/1080)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent image_3
      image [set every repeat] = $img3
      pos = (193/1080, -287/1080)
      size = (327/1080,383/1080)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent image_4
      image [set every repeat] = $img4
      pos = (607/1080, -287/1080)
      size = (327/1080,383/1080)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent image_5
      image [set every repeat] = $img5
      pos = (-635/1080, 173/1080)
      size = (327/1080,383/1080)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent image_6
      image [set every repeat] = $img6
      pos = (-221/1080, 173/1080)
      size = (327/1080,383/1080)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent image_7
      image [set every repeat] = $img7
      pos = (193/1080, 173/1080)
      size = (327/1080,383/1080)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent image_8
      image [set every repeat] = $img8
      pos = (607/1080, 173/1080)
      size = (327/1080,383/1080)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    MouseComponent mouse
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    PolygonComponent target
      disabled = True
      fillColor = red
      lineColor = red
      opacity = 0
      pos [set every repeat] = (250/1080, 80/1080)
      shape = rectangle
      size = (327/1080,383/1080)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine text
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    TextComponent clue
      letterHeight = 40/1080
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.8
      text [set every repeat] = $name
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  Routine thanks
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    TextComponent thanks_text
      letterHeight = 50/1080
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Огромное спасибо за прохождение эксперимента!
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    CodeComponent code_2
      Code Type = JS
      Begin JS Routine:
        // Disable downloading results to browser
        psychoJS._saveResults = 0;
        // Generate filename for results
        let filename = psychoJS._experiment._experimentName + '_' +
        psychoJS._experiment._datetime + '.csv';
        // Extract data object from experiment
        let dataObj = psychoJS._experiment._trialsData;
        // Convert data object to CSV
        let data = [Object.keys(dataObj[0])].concat(dataObj).map(it => {
        return Object.values(it).toString()
        }).join('\n')
        // Send data to OSF via DataPipe
        console.log('Saving data...');
        fetch('https://pipe.jspsych.org/api/data', {
         method: 'POST',
         headers: {
         'Content-Type': 'application/json',
         Accept: '*/*',
         },
         body: JSON.stringify({
         experimentID: '9SDur4jMkWde',
         filename: filename,
         data: data,
         }),
        }).then(response => response.json()).then(data => {
            // Log response aud force experiment end
        console.log(data);
        quitPsychoJS();
        })
  Routine fix_cross
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    TextComponent cross_fix
      letterHeight = 50
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine audio
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    SoundComponent audio_text
      forceEndRoutine = False
      sound [set every repeat] = audio_exp.mp3
      startVal [time (s)] = 0.0
      stopWithRoutine = False
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  Routine audio_textt
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    CodeComponent code_3
      Code Type = Both
      Begin Experiment:
        from psychopy import sound
        audio_texttt = sound.Sound('audio_exp.mp3')
        audio_duration = 635
      Begin JS Experiment:
        audio_texttt = new sound.Sound ({
            win: psychoJS.window,
            value: 'audio_exp.mp3',
            secs: -1,
            volume: 1.0,
            loops: 0
        });

        audio_duration = 635;
        audio_started = false;
        audio_start_time = null;
      Begin JS Routine:
        if (!audio_started) {
            audio_texttt.play();
            audio_start_time = globalClock.getTime();
            audio_started = true;
        }
        continueRoutine = false
      Begin Routine:
        audio_texttt.play()
        audio_start_time = globalClock.getTime()
  Routine wait_audio_end
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    TextComponent wait_text
      letterHeight = 50/1080
      startVal [time (s)] = 0.0
      text = Пожалуйста, дослушайте историю...
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    CodeComponent code_4
      Code Type = Both
      Each Frame:
        if globalClock.getTime() - audio_start_time >= audio_duration:
            continueRoutine = False
      Each JS Frame:
        if (audio_start_time !== null) {
            if (globalClock.getTime() - audio_start_time >= audio_duration) {
                continueRoutine = False;
            }
        }
Flow
  Routine instr
  Routine audio_textt
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = exp_stimuli_high.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [{'stimuli': 'bootsarcticdrift.png', 'name': 'Дутики Arctic Drift', 'category': 'boots'},
      {'stimuli': 'bootsarcticsnow.png', 'name': 'Дутики Arctic Snow', 'category': 'boots'},
      {'stimuli': 'bootsfrostpeak.png', 'name': 'Ботинки Frost Peak', 'category': 'boots'},
      {'stimuli': 'bootsfrostridge.png', 'name': 'Сапоги Frost Ridge', 'category': 'boots'},
      {'stimuli': 'bootsglacierridge.png', 'name': 'Ботинки Glacier Ridge', 'category': 'boots'},
      {'stimuli': 'bootsnordway.png', 'name': 'Ботинки зимние NordWay', 'category': 'boots'},
      {'stimuli': 'bootsnorthridge.png', 'name': 'Сапоги North Ridge', 'category': 'boots'},
      {'stimuli': 'bootsnorthtrail.png', 'name': 'Ботинки North Trail', 'category': 'boots'},
      {'stimuli': 'bootspolardrift.png', 'name': 'Дутики Polar Drift', 'category': 'boots'},
      {'stimuli': 'bootspolarfox.png', 'name': 'Угги Polar Fox', 'category': 'boots'},
      {'stimuli': 'bootspolarhunter.png', 'name': 'Сапоги Polar Hunter', 'category': 'boots'},
      {'stimuli': 'bootssibir.png', 'name': 'Сапоги резиновые «Сибирь»', 'category': 'boots'},
      {'stimuli': 'bootssnowridge.png', 'name': 'Полусапоги Snow Ridge', 'category': 'boots'},
      {'stimuli': 'bootssnowway.png', 'name': 'Ботинки SnowWay', 'category': 'boots'},
      {'stimuli': 'bootstaiga.png', 'name': 'Сапоги утепленные «Тайга»', 'category': 'boots'},
      {'stimuli': 'bootswinterfox.png', 'name': 'Угги Winter Fox', 'category': 'boots'},
      {'stimuli': 'bootsglaciertrek.png', 'name': 'Ботинки Glacier Trek', 'category': 'boots'}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
    Routine text
    Routine trial
  LoopTerminator trials
  Routine wait_audio_end
  Routine thanks
